CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:spinalcord
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:spinalcord
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:GFAP
    Convert green to gray?:Yes
    Name the output image:TDP-43
    Convert blue to gray?:Yes
    Name the output image:DAPI
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:GFAP
    Name the primary objects to be identified:PrimaryObject_GFAP
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:GFAP
    Name the output image:Enhance_GFAP
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Line structures
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    Rescale result image:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Enhance_GFAP
    Name the primary objects to be identified:PrimaryObject_Enhance_GFAP
    Typical diameter of objects, in pixel units (Min,Max):30,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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
OverlayObjects:[module_num:9|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
    Input:GFAP
    Name the output image:Overlay_PrimaryObject_GFAP
    Objects:PrimaryObject_GFAP
    Opacity:0.5

OverlayObjects:[module_num:10|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
    Input:GFAP
    Name the output image:Overlay_PrimaryObject_Enhance_GFAP
    Objects:PrimaryObject_Enhance_GFAP
    Opacity:0.5
